PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Flickering Muliple Choice
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Routines
  Routine trial
    PolygonComponent uprighttangle
      fillColor = white
      opacity [set every frame] = sin(20*t)
      pos = (0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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    PolygonComponent downrighttangle
      fillColor = white
      opacity [set every frame] = sin(15*t)
      pos = (0.2, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent downlefttangle
      fillColor = white
      opacity [set every frame] = sin(10*t)
      pos = (-0.2, -0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent uplefttangle
      fillColor = white
      opacity [set every frame] = sin(25*t)
      pos = (-0.2, 0.2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = uprighttangle, downrighttangle, downrighttangle, uplefttangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent uprtext
      color = red
      letterHeight = 0.1
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = B
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    TextComponent downrtext
      color = green
      letterHeight = 0.1
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = D
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    TextComponent downltext
      color = blue
      letterHeight = 0.1
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = C
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    TextComponent upltext
      color = purple
      letterHeight = 0.1
      pos = (-0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = A
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Flow
  Routine trial
