PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = title
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Routines
  Routine trial
    PolygonComponent left_top
      fillColor = blue
      lineColor = black
      opacity [set every frame] = sin(10*t)
      pos = (-0.6, 0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_top
      fillColor = yellow
      lineColor = black
      pos = (0, 0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_top
      fillColor = purple
      lineColor = black
      pos = (0.6, 0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent left_bottom
      fillColor = pink
      lineColor = black
      pos = (-0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_bottom
      fillColor = green
      lineColor = black
      pos = (0, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_bottom
      fillColor = red
      lineColor = black
      pos = (0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent a
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = A
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    TextComponent c
      color = black
      letterHeight = 0.05
      pos = (0.6, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = C
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    TextComponent d
      color = black
      letterHeight = 0.05
      pos = (-0.6, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = D
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    TextComponent e
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        E
    TextComponent f
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = F
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    TextComponent b
      color = black
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = B
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Flow
  Routine trial
