PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = title
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Routines
  Routine trial
    PolygonComponent left_top
      fillColor = blue
      lineColor = black
      opacity [set every frame] = sin(25.12*t)
      pos = (-0.6, 0.2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_top
      fillColor = yellow
      lineColor = black
      opacity [set every frame] = sin(43.98*t)
      pos = (0, 0.2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_top
      fillColor = purple
      lineColor = black
      opacity [set every frame] = sin(62.83*t)
      pos = (0.6, 0.2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent left_bottom
      fillColor = pink
      lineColor = black
      opacity [set every frame] = sin(81.68*t)
      pos = (-0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_bottom
      fillColor = green
      lineColor = black
      opacity [set every frame] = sin(100.53*t)
      pos = (0, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_bottom
      fillColor = red
      lineColor = black
      opacity [set every frame] = sin(119.38*t)
      pos = (0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent h
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = H
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    TextComponent i
      color = black
      letterHeight = 0.05
      pos = (0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = I
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    TextComponent k
      color = black
      letterHeight = 0.05
      pos = (-0.6, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = K
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    TextComponent l
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        L
    TextComponent m
      color = black
      letterHeight = 0.05
      pos = (0.6, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = M
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    TextComponent j
      color = black
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        J
    TextboxComponent textbar
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = answer
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    PolygonComponent back
      fillColor = white
      opacity [set every frame] = sin(138.23*t)
      pos = (-0.6, 0.4)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent back_text
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Back
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Flow
  Routine trial
