PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = blue
  expName = title
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Routines
  Routine trial
    PolygonComponent left_top
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(1.57*t)
      pos = (-0.6, 0.17)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_top
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(0.2*t)
      pos = (0, 0.17)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_top
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(0.9*t)
      pos = (0.6, 0.17)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent left_bottom
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(.224*t)
      pos = (-0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent middle_bottom
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(.63*t)
      pos = (0, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_bottom
      fillColor = grey
      lineColor = black
      opacity [set every frame] = sin(.25*t)
      pos = (0.6, -0.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent m
      letterHeight = 0.04
      pos = (-0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = M
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    TextComponent n
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = N
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    TextComponent o
      letterHeight = 0.04
      pos = (0.6, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = O
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    TextComponent p
      letterHeight = 0.04
      pos = (-0.6, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = P
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    TextComponent q
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Q
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    TextComponent r
      letterHeight = 0.04
      pos = (0.6, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = R
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    TextboxComponent textbar
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.37)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = answer
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    ButtonComponent undo
      bold = True
      borderColor = white
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(.39*t)
      pos = (0.6, 0.35)
      size = [.2, .1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      text = Undo
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    ButtonComponent home
      bold = True
      borderColor = white
      fillColor = black
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(.285*t)
      pos = (-.6, .35)
      size = [.2, .1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20.0
      text = Home
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    MouseComponent mouse
      clickable = left_top, middle_top, right_top, left_bottom, middle_bottom, right_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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Flow
  Routine trial
