PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = s_w
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Routines
  Routine m__r
    PolygonComponent left_top_circle
      fillColor = blue
      lineColor = black
      opacity [set every frame] = sin(25.12*t)
      pos = (-0.6, 0.2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent left_bottom_circle
      fillColor = pink
      lineColor = black
      opacity [set every frame] = sin(81.68*t)
      pos = (-.6, -.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent center_top_circle
      fillColor = yellow
      opacity [set every frame] = sin(43.98*t)
      pos = (0, .2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent center_bottom_circle
      fillColor = green
      lineColor = black
      opacity [set every frame] = sin(100.53*t)
      pos = (0, -.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_top_circle
      fillColor = purple
      lineColor = black
      opacity [set every frame] = sin(62.83*t)
      pos = (.6, .2)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    PolygonComponent right_bottom_circle
      fillColor = red
      lineColor = black
      opacity [set every frame] = sin(119.38*t)
      pos = (.6, -.3)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent s
      letterHeight = 0.05
      pos = (-.6, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        S
    TextComponent t_
      letterHeight = 0.05
      pos = (0, .045)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        T
    TextComponent u
      letterHeight = 0.05
      pos = (.6, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        U
    TextComponent v
      letterHeight = 0.05
      pos = (-.6, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = V
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    TextComponent w
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = W
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    TextComponent x_
      letterHeight = 0.05
      pos = (.6, -.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = X
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    TextboxComponent textbox
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, .35)
      size = (.8, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = answer
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    PolygonComponent back
      fillColor = white
      pos = (-0.6, .4)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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    TextComponent back_text
      color = black
      letterHeight = 0.035
      pos = (-.6, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = back
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Flow
  Routine m__r
