PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = beige
  expName = Home Page
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Routines
  Routine trial
    TextboxComponent textbox
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      opacity = .8
      pos = [0,.35]
      size = [.8,.1]
      startVal [time (s)] = 0.0
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      text:
        Response Goes Here
    ButtonComponent Yes
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(25.12*t)
      pos = (.15, .1)
      size = [.2,.1]
      startVal [time (s)] = 0
      text [set every frame] = Yes
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    ButtonComponent No
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(43.96*t)
      pos = (-.15, .1)
      size = [.2,.1]
      startVal [time (s)] = 0
      text = No
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    ButtonComponent Number
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(62.8*t)
      pos = (-.3, -.1)
      size = [.2,.1]
      startVal [time (s)] = 0
      text = #
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    ButtonComponent MCQ
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(81.64*t)
      pos = [0,-.1]
      size = [.2,.1]
      startVal [time (s)] = 0
      text = MC
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    ButtonComponent FRQ
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(100.48*t)
      pos = [.3,-.1]
      size = [.2,.1]
      startVal [time (s)] = 0
      text = A B C
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    MouseComponent mouse
      clickable = MCQ, FRQ, No, Yes, Delete, Number
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ButtonComponent Submit
      bold = True
      borderColor = black
      borderWidth = 2
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      opacity [set every frame] = sin(t*138.16)
      pos = [.3,-.35]
      size = [.3,.15]
      startVal [time (s)] = 0
      text = Submit
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    PolygonComponent Delete
      contrast = 2
      fillColor = black
      opacity [set every frame] = sin(119.32*t)
      pos = [-.2,-.35]
      shape = cross
      size = [.2,.15]
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Welcome to the Home Page
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Flow
  Routine welcome
  Routine trial
