PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = blue
  expName = Flickering Muliple Choice Final II
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Routines
  Routine trial
    PolygonComponent uprighttangle
      fillColor = black
      opacity [set every frame] = sin(25.12*t)
      pos = (0.2, 0.175)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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    PolygonComponent downrighttangle
      fillColor = black
      opacity [set every frame] = sin(43.96*t)
      pos = (0.2, -0.2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent downlefttangle
      fillColor = black
      opacity [set every frame] = sin(62.8*t)
      pos = (-0.2, -0.2)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent uplefttangle
      fillColor = black
      opacity [set every frame] = sin(81.64*t)
      pos = (-0.2, 0.175)
      shape = rectangle
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = uprighttangle, downrighttangle, downrighttangle, uplefttangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent uprtext
      letterHeight = 0.1
      pos = (0.2, 0.175)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = B
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    TextComponent downrtext
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = D
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    TextComponent downltext
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = C
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    TextComponent upltext
      letterHeight = 0.1
      pos = (-0.2, 0.175)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = A
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    TextboxComponent textbox
      bold = False
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, 0.35)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent backtangle
      fillColor = black
      pos = (0.6, 0.35)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent hometangle
      fillColor = black
      pos = (-0.6, 0.35)
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text
      letterHeight = 0.0.5
      pos = (0.6,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = UNDO
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Flow
  Routine trial
