PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Testing
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Routines
  Routine Choose_Number_
    ButtonComponent button_1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*10)
      pos = (-.6, .25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent button_05
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*20)
      pos = (-.60, 0)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 5
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    ButtonComponent button_08
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*15)
      pos = (.3,0)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 8
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    ButtonComponent button_02
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*25)
      pos = (-.3,.25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent button_06
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*30)
      pos = (-.3, 0)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 6
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    ButtonComponent button_03
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*5)
      pos = (0,.25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent button_07
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*40)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 7
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    ButtonComponent button_00
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*32)
      pos = (0,-.25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 0
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    ButtonComponent button_04
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*50)
      pos = (.3,.25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent button_09
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      opacity [set every frame] = sin(t*35)
      pos = (-.3,-.25)
      size = (.25,.20)
      startVal [time (s)] = 0
      text = 9
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  Routine routine_1
    TextComponent txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 1
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  Routine routine_2
    TextComponent txt2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 2
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  Routine routine_3
    TextComponent txt3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 3
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  Routine routine_4
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  Routine routine_5
    TextComponent text5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 5
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  Routine routine_6
    TextComponent text6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 6
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  Routine routine_7
    TextComponent text7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 7
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  Routine routine_8
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  Routine routine_9
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  Routine routine_0
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 0
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Flow
  Routine Choose_Number_
  Routine routine_1
  Routine routine_2
  Routine routine_3
  Routine routine_4
  Routine routine_5
  Routine routine_6
  Routine routine_7
  Routine routine_8
  Routine routine_9
  Routine routine_0
